PsychoPy2experiment version="1.80.03"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Phono_words_120824cp
  Save excel file = True
  Units = use prefs
  Screen = 2
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Routines
  Routine words_run
    KeyboardComponent key_resp_words_run
      correctAns = $CorrAns_words
      storeCorrect = True
      stopVal [duration (s)] = $Duration_words
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','num_1','num_2','num_3','num_4'
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent image_words_run
      stopVal [duration (s)] = $Duration_words
      startVal [time (s)] = 0.0
      image [set every repeat] = $stim_words
      size = [1.8, 1.8]
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  Routine instructions
    KeyboardComponent key_resp_instr_words
      forceEndRoutine = True
      allowedKeys = 'plus','+','5','num_5','num_add'
      startVal [time (s)] = 0.0
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    TextComponent text_instr_words
      text = Get ready!
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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  Routine words_bye
    TextComponent text_words_bye
      text = Great job!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator words_run_loop loopType="TrialHandler"
    conditionsFile = phono_words_stimuli.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Duration_words': 2, 'CorrAns_words': -1, 'stim_words': u'/Users/JACRA/Desktop/RAISE_scan tasks/RAISE-phono_words/PhonoTask_Stim/all_trial_jpegs/rhymered.jpg', 'TrialType_words': 4},
      {'Duration_words': 4, 'CorrAns_words': 2, 'stim_words': u'/Users/JACRA/Desktop/RAISE_scan tasks/RAISE-phono_words/PhonoTask_Stim/all_trial_jpegs/rn_shadowvalue.jpg', 'TrialType_words': 1},
      {'Duration_words': 4, 'CorrAns_words': 1, 'stim_words': u'/Users/JACRA/Desktop/RAISE_scan tasks/RAISE-phono_words/PhonoTask_Stim/all_trial_jpegs/ry_rewardrecord.jpg', 'TrialType_words': 1},
      {'Duration_words': 4, 'CorrAns_words': 2, 'stim_words': u'/Users/JACRA/Desktop/RAISE_scan tasks/RAISE-phono_words/PhonoTask_Stim/all_trial_jpegs/rn_essayvision.jpg', 'TrialType_words': 1},
      {'Duration_words': 4, 'CorrAns_words': 2, 'stim_words': u'/Users/JACRA/Desktop/RAISE_scan tasks/RAISE-phono_words/PhonoTask_Stim/all_trial_jpegs/rn_needletoken.jpg', 'TrialType_words': 1},
      {'Duration_words': 4, 'CorrAns_words': 1, 'stim_words': u'/Users/JACRA/Desktop/RAISE_scan tasks/RAISE-phono_words/PhonoTask_Stim/all_trial_jpegs/ry_canoeissue.jpg', 'TrialType_words': 1},
      {'Duration_words': 20, 'CorrAns_words': -1, 'stim_words': u'/Users/JACRA/Desktop/RAISE_scan tasks/RAISE-phono_words/PhonoTask_Stim/all_trial_jpegs/fix.png', 'TrialType_words': 3},
      {'Duration_words': 2, 'CorrAns_words': -1, 'stim_words': u'/Users/JACRA/Desktop/RAISE_scan tasks/RAISE-phono_words/PhonoTask_Stim/all_trial_jpegs/samered.jpg', 'TrialType_words': 4}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
    Routine words_run
  LoopTerminator words_run_loop
  Routine words_bye
